---
API: 3
OpenSesame: 4.0.13
Platform: nt
---
set width 1024
set uniform_coordinates no
set title Snell_Mlinaric_6_flankers_V1
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\yrt290\\OneDrive - Vrije Universiteit Amsterdam\\Desktop\\Experiment_2\\Experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background white

define sketchpad PIF_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Dear Participant,<br /><br />thank you for your willingness to participate in our study.<br />The purpose of this form is to inform you about important<br />aspects of our research and data collection so you have all<br />the necessary information to decide whether you want to<br />participate or not. Please read through this form carefully. Do<br />not hesitate to pose any questions that you may have to a<br />member of our team. You can reach us through Prolific.<br />After you have read this form and your<br />questions have been answered, please take time to decide <br />whether you want to participate in this study. Your<br />participation is voluntary. There<br />will be no negative consequences for you in case you decide<br /> not to participate. If you decide to participate, please indicate<br />that in the consent form.<br /><br />1. Purpose of the study<br />The purpose of this study is to investigate the way our brain<br />reads, focusing on attention in reading in non-dyslexic adults.<br />We will do that by using behavioural data from a simple flanker task.<br /><br />Press any key to proceed." x=0 y=0 z_index=0

define sketchpad PIF_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="2. What participation means<br />You are participating in an online version of our experiment.<br />If you decide to participate in this study, the stimuli will be<br />presented on the screen of your desktop computer. The main<br />part of the experiment will be a flanker task. At the centre of<br />the screen, you will see either a word or a non-word. You will<br />have to decide whether a stimulus is a word or a non-word<br />and indicate your decision by a click on the keyboard button<br />as quickly and accurately as possible. There will be other<br />strings of letters on the right and left hand side from the<br />central word/non-word. You will have to ignore those. The<br />stimuli will be presented in Dutch. You will start with the<br />practice run and continue with the official part of the<br />experiment. You will get a self-paced break during the<br />experiment. The computer will log different variables, e.g.,<br />your reaction times, condition and characteristics of each trial<br />presented to you, accuracy and other information derived<br />from the experiment. This is called your research data.<br /><br />We will also ask you whether Dutch is your first language,<br />whether you are a non-dyslexic reader and whether you have<br />normal or corrected-to-normal vision. Those questions are<br />only necessary to determine eligibility for the study and the<br />answers will not be logged. The experiment will stop in case<br />you are not eligible for the study. We will ask those questions<br />together, so you can indicate your eligibility for the study<br />without specifically indicating which criteria do or do not<br />apply.<br /><br />Press any key to proceed.<br />" x=0 y=0 z_index=0

define sketchpad PIF_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="3. What is expected of you<br />In case you decide to participate, we expect that you take<br />part in a serious and responsible manner. We kindly ask<br />you to follow the instructions communicated to you<br />and to give your best effort. Naturally you can terminate<br />your participation in the middle of the experiment<br />if you want to, without stating a reason. This study is <br />only compatible with desktop computers or laptops. Please<br />do not take the study if you are using a mobile phone or<br />tablet as this may result in your submission being <br />rejected or returned.<br /><br />4. Potential risks and benefits<br />The results of our study will not directly<br />benefit you. We hope that conclusions<br />from this study will help us understand the<br />cognitive mechanisms underlying reading<br />in more detail. A possible disadvantage of participating<br />in this study may be that you invest time to participate.<br />We are using non-invasive techniques and<br />do not expect any negative consequences.<br />The stimuli will be presented to you on a<br />computer screen and will be of low to<br />medium intensity, similar to other everyday<br />screen activities (computer games,<br />browsing on the phone). The stimuli<br />display will change moderately quickly. If you suffer<br />from epilepsy, migraine or related medical<br />conditions or are sensitive to the<br />aforementioned characteristics of our<br />research, please do not participate in our<br />experiment. When in doubt, it is better not<br />to participate.<br /><br />Press any key to proceed." x=0 y=0 z_index=0

define sketchpad PIF_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="5. If you do not want to participate or want to stop the study<br />You decide whether to participate in the<br />study. Participation is voluntary. If you<br />decide not to participate, you do not need<br />to do anything else. Simply close this<br />window in your browser or return this submission on<br />Prolific by selecting the 'stop without completing' button. You<br />can also indicate that you do not consent to participate in our<br />study by clicking on the N button when we ask you about your<br />consent. You do not have to sign anything. You do not have<br />to say why you do not want to participate.<br />There will be no negative consequences for you, if you<br />decide not to participate. If you do<br />participate, you can always change your<br />mind and stop anyway, also during the<br />investigation. The data collected up to that<br />point will be used for the research.<br /><br />6. End of the Study<br />Your participation in the study will stop<br />when all measurements are over, if you<br />choose to stop, or if the researchers think<br />it is better for you to stop. The entire study<br />is over when data collection for all<br />participants has ended. Our work may be<br />revisited in the future.<br /><br />Press any key to proceed." x=0 y=0 z_index=0

define sketchpad PIF_5
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="7. Use and Retention of Your Information<br />The fact that your data was collected does not guarantee that<br />it will be used or analysed for our study. It could be<br />dropped; for example in case it does not meet our criteria<br />(e.g., accuracy is to low).<br /><br />Your data<br />In this experiment, we do not ask you for or log your name,<br />surname, date of birth, or other information of that sort. We<br />will only see your Prolific ID, but we do not have a key file,<br />meaning that when working with your research data, we will<br />not know who this data belongs to and we will not attempt to<br />reconstruct that. Consequently, we will not be able to<br />reidentify and remove your research data once you finished<br />participating in our study.<br />Research data that are published in<br />scientific journals will be anonymous and<br />cannot be traced back to you as an individual.<br />The researchers will keep your data for at<br />least 10 years, as is determined by law.<br /><br />Sharing anonymized research data<br />All research data collected in the current<br />study can be used in other, future<br />research. Such future research can focus<br />on questions that are not related to the current study. <br /><br />Press any key to proceed.<br />" x=0 y=0 z_index=0

define sketchpad PIF_6
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="The research data will be shared anonymously, but freely<br />accessible on the internet via a public data repository.<br />The research data that will be shared will not<br />contain any personal information such as<br />name, address, date of birth, date of<br />participation and facial features or other<br />information that would make it possible for<br />others to directly identify you. We will also<br />not share your Prolific ID. The anonymity described above<br />(by means of separating the research data from the<br />personal information) is no longer guaranteed when<br />a third party (e.g., a company) that has your personal<br />information and similar information and shares this<br />information publicly. <br /><br /><br />8. Compensation for participation<br />Participation in the study costs you<br />nothing. As a compensation for the time (approximately 30<br />minutes, depending on how quick and accurate you are)<br />you invested to complete our experiment,<br />you will be given money (5.5 £). If you stop before the<br />research is finished, you will not be given any money. If you<br />do not consent to the terms of our research or if exclusion<br />criteria apply to you, you will not be able to participate in our<br />experiment and you will not be paid any money. You are only<br />allowed to participate in this research once. In case you<br />participate multiple times, you will only be paid once.<br />Responses that are clearly fraudulent (e.g it's clear that a bot<br />was used to repeatedly participate in the experiment or<br />participant objectively demonstrated clear low-effort<br />throughout the experiment - for instance only pressed the<br />same button) will not be compensated.<br /><br />Press any key to proceed.<br />" x=0 y=0 z_index=0

define sketchpad PIF_7
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="9. Exclusion criteria<br />You will be excluded from this study if Dutch is not your first language,<br />if you have dyslexia, if you do not have normal or<br />corrected-to-normal vision and if you are aged 17 or less or 36 or more.<br />You also need to be fluent English speaker to understand our<br />Consent Form and Participant Information Form.<br />In case any of the exclusion<br />criteria apply to you, please do not continue with our<br />experiment. You do not need to state the<br />reason in case you do not want to.<br /><br />10. Why have you been invited to participate<br />You have been invited to participate in this<br />experiment because you indicated your willingness to<br />participate through an online platform.<br /><br />11. Who will work with us<br />The main researchers working on this<br />study are dr. Joshua Snell and Maša<br />Mlinarič. We sometimes work with the university students,<br />who help us with the data collection or analysis. It is possible<br />they start working on this project as well. In<br />case they or other researchers join our team, they will have<br />access to your data. They will be obliged to keep it confidential.<br /><br />12. Ethical review and complaints<br />The research design has been assessed<br />by the Standing Committee on Science<br />and Ethics of the Faculty of Behavioral and<br />Movement Sciences, VU University<br />Amsterdam and complies with the faculty's<br />ethical guidelines. If you have complaints<br />or questions, please reach to us through Prolific.<br /><br />Press any key to continue.<br />" x=0 y=0 z_index=0

define keyboard_response PIF_read_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response Y
	set allowed_responses "Y;N"

define sketchpad PIF_read_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Would you like to read the Participant Information Form,<br />where we discuss the rules of our study,<br />how we manipulate your data<br />and present a short summary of our study?<br /><br />Press Y for yes and N for no." x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Thank you for taking time to consider participating in our study." x=0 y=-128 z_index=0

define sketchpad _1
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text=1 x=0 y=0 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad _2
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text=2 x=0 y=0 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad _3
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text=3 x=0 y=0 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define loop block_loop_0
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 420
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "hols hols hols preu hols hols hols"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 1
	setcycle 1 correct_response C
	setcycle 1 stimulus "keed keed keed noft keed keed keed"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 1
	setcycle 2 correct_response C
	setcycle 2 stimulus "gint gint gint koed gint gint gint"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 1
	setcycle 3 correct_response C
	setcycle 3 stimulus "laus laus laus obee laus laus laus"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 1
	setcycle 4 correct_response C
	setcycle 4 stimulus "dalk dalk dalk zies dalk dalk dalk"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 1
	setcycle 5 correct_response C
	setcycle 5 stimulus "wans wans wans vrie wans wans wans"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "buim buim buim voof buim buim buim"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 1
	setcycle 7 correct_response C
	setcycle 7 stimulus "medo medo medo pijt medo medo medo"
	setcycle 7 target_type nonword
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response C
	setcycle 8 stimulus "jijk jijk jijk enes jijk jijk jijk"
	setcycle 8 target_type nonword
	setcycle 8 flanker_condition 1
	setcycle 9 correct_response C
	setcycle 9 stimulus "hins hins hins poow hins hins hins"
	setcycle 9 target_type nonword
	setcycle 9 flanker_condition 1
	setcycle 10 correct_response C
	setcycle 10 stimulus "merf merf merf soop merf merf merf"
	setcycle 10 target_type nonword
	setcycle 10 flanker_condition 1
	setcycle 11 correct_response C
	setcycle 11 stimulus "ezis ezis ezis paat ezis ezis ezis"
	setcycle 11 target_type nonword
	setcycle 11 flanker_condition 1
	setcycle 12 correct_response C
	setcycle 12 stimulus "icht icht icht vool icht icht icht"
	setcycle 12 target_type nonword
	setcycle 12 flanker_condition 1
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	setcycle 30 correct_response C
	setcycle 30 stimulus "feep hoot hoot feep hoot hoot hoot"
	setcycle 30 target_type nonword
	setcycle 30 flanker_condition 2
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	setcycle 60 correct_response C
	setcycle 60 stimulus "boal meis boal meis boal boal boal"
	setcycle 60 target_type nonword
	setcycle 60 flanker_condition 3
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	setcycle 90 correct_response C
	setcycle 90 stimulus "wors wors cini cini wors wors wors"
	setcycle 90 target_type nonword
	setcycle 90 flanker_condition 4
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	setcycle 120 correct_response C
	setcycle 120 stimulus "nale nale nale sugo sugo nale nale"
	setcycle 120 target_type nonword
	setcycle 120 flanker_condition 5
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	setcycle 150 correct_response C
	setcycle 150 stimulus "patt patt patt geid patt geid patt"
	setcycle 150 target_type nonword
	setcycle 150 flanker_condition 6
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	setcycle 180 correct_response C
	setcycle 180 stimulus "roup roup roup beel roup roup beel"
	setcycle 180 target_type nonword
	setcycle 180 flanker_condition 7
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	setcycle 210 correct_response M
	setcycle 210 stimulus "maak maak maak oude maak maak maak"
	setcycle 210 target_type word
	setcycle 210 flanker_condition 1
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	setcycle 240 correct_response M
	setcycle 240 stimulus "poot wijf wijf poot wijf wijf wijf"
	setcycle 240 target_type word
	setcycle 240 flanker_condition 2
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	setcycle 270 correct_response M
	setcycle 270 stimulus "boom duur boom duur boom boom boom"
	setcycle 270 target_type word
	setcycle 270 flanker_condition 3
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	setcycle 300 correct_response M
	setcycle 300 stimulus "liep liep kans kans liep liep liep"
	setcycle 300 target_type word
	setcycle 300 flanker_condition 4
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	setcycle 330 correct_response M
	setcycle 330 stimulus "club club club ster ster club club"
	setcycle 330 target_type word
	setcycle 330 flanker_condition 5
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	setcycle 360 correct_response M
	setcycle 360 stimulus "eeuw eeuw eeuw stap eeuw stap eeuw"
	setcycle 360 target_type word
	setcycle 360 flanker_condition 6
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	setcycle 390 correct_response M
	setcycle 390 stimulus "bond bond bond saai bond bond saai"
	setcycle 390 target_type word
	setcycle 390 flanker_condition 7
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	run trial_sequence_0

define loop block_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 420
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "roup roup roup beel roup roup roup"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 1
	setcycle 1 correct_response C
	setcycle 1 stimulus "coho coho coho kelg coho coho coho"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 1
	setcycle 2 correct_response C
	setcycle 2 stimulus "dijf dijf dijf zeus dijf dijf dijf"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 1
	setcycle 3 correct_response C
	setcycle 3 stimulus "pans pans pans kole pans pans pans"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 1
	setcycle 4 correct_response C
	setcycle 4 stimulus "halp halp halp gied halp halp halp"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 1
	setcycle 5 correct_response C
	setcycle 5 stimulus "wijm wijm wijm bels wijm wijm wijm"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "drik drik drik onel drik drik drik"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 1
	setcycle 7 correct_response C
	setcycle 7 stimulus "ilde ilde ilde sont ilde ilde ilde"
	setcycle 7 target_type nonword
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response C
	setcycle 8 stimulus "uist uist uist eben uist uist uist"
	setcycle 8 target_type nonword
	setcycle 8 flanker_condition 1
	setcycle 9 correct_response C
	setcycle 9 stimulus "vlom vlom vlom tert vlom vlom vlom"
	setcycle 9 target_type nonword
	setcycle 9 flanker_condition 1
	setcycle 10 correct_response C
	setcycle 10 stimulus "bork bork bork leit bork bork bork"
	setcycle 10 target_type nonword
	setcycle 10 flanker_condition 1
	setcycle 11 correct_response C
	setcycle 11 stimulus "diet diet diet saks diet diet diet"
	setcycle 11 target_type nonword
	setcycle 11 flanker_condition 1
	setcycle 12 correct_response C
	setcycle 12 stimulus "kour kour kour zwee kour kour kour"
	setcycle 12 target_type nonword
	setcycle 12 flanker_condition 1
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	setcycle 30 correct_response C
	setcycle 30 stimulus "preu hols hols preu hols hols hols"
	setcycle 30 target_type nonword
	setcycle 30 flanker_condition 2
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	setcycle 60 correct_response C
	setcycle 60 stimulus "hoot feep hoot feep hoot hoot hoot"
	setcycle 60 target_type nonword
	setcycle 60 flanker_condition 3
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	setcycle 90 correct_response C
	setcycle 90 stimulus "boal boal meis meis boal boal boal"
	setcycle 90 target_type nonword
	setcycle 90 flanker_condition 4
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	setcycle 120 correct_response C
	setcycle 120 stimulus "wors wors wors cini cini wors wors"
	setcycle 120 target_type nonword
	setcycle 120 flanker_condition 5
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	setcycle 150 correct_response C
	setcycle 150 stimulus "nale nale nale sugo nale sugo nale"
	setcycle 150 target_type nonword
	setcycle 150 flanker_condition 6
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	setcycle 180 correct_response C
	setcycle 180 stimulus "patt patt patt geid patt patt geid"
	setcycle 180 target_type nonword
	setcycle 180 flanker_condition 7
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	setcycle 210 correct_response M
	setcycle 210 stimulus "bond bond bond saai bond bond bond"
	setcycle 210 target_type word
	setcycle 210 flanker_condition 1
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	setcycle 240 correct_response M
	setcycle 240 stimulus "oude maak maak oude maak maak maak"
	setcycle 240 target_type word
	setcycle 240 flanker_condition 2
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	setcycle 270 correct_response M
	setcycle 270 stimulus "wijf poot wijf poot wijf wijf wijf"
	setcycle 270 target_type word
	setcycle 270 flanker_condition 3
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	setcycle 300 correct_response M
	setcycle 300 stimulus "boom boom duur duur boom boom boom"
	setcycle 300 target_type word
	setcycle 300 flanker_condition 4
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	setcycle 330 correct_response M
	setcycle 330 stimulus "liep liep liep kans kans liep liep"
	setcycle 330 target_type word
	setcycle 330 flanker_condition 5
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	setcycle 360 correct_response M
	setcycle 360 stimulus "club club club ster club ster club"
	setcycle 360 target_type word
	setcycle 360 flanker_condition 6
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	setcycle 390 correct_response M
	setcycle 390 stimulus "eeuw eeuw eeuw stap eeuw eeuw stap"
	setcycle 390 target_type word
	setcycle 390 flanker_condition 7
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	run trial_sequence_1

define loop block_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 420
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "patt patt patt geid patt patt patt"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 1
	setcycle 1 correct_response C
	setcycle 1 stimulus "satt satt satt bown satt satt satt"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 1
	setcycle 2 correct_response C
	setcycle 2 stimulus "wakt wakt wakt zose wakt wakt wakt"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 1
	setcycle 3 correct_response C
	setcycle 3 stimulus "brop brop brop keuk brop brop brop"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 1
	setcycle 4 correct_response C
	setcycle 4 stimulus "snop snop snop reug snop snop snop"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 1
	setcycle 5 correct_response C
	setcycle 5 stimulus "biek biek biek stog biek biek biek"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "oomt oomt oomt luil oomt oomt oomt"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 1
	setcycle 7 correct_response C
	setcycle 7 stimulus "muns muns muns tekt muns muns muns"
	setcycle 7 target_type nonword
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response C
	setcycle 8 stimulus "wien wien wien zoud wien wien wien"
	setcycle 8 target_type nonword
	setcycle 8 flanker_condition 1
	setcycle 9 correct_response C
	setcycle 9 stimulus "hawa hawa hawa pelk hawa hawa hawa"
	setcycle 9 target_type nonword
	setcycle 9 flanker_condition 1
	setcycle 10 correct_response C
	setcycle 10 stimulus "emer emer emer shap emer emer emer"
	setcycle 10 target_type nonword
	setcycle 10 flanker_condition 1
	setcycle 11 correct_response C
	setcycle 11 stimulus "dold dold dold pijs dold dold dold"
	setcycle 11 target_type nonword
	setcycle 11 flanker_condition 1
	setcycle 12 correct_response C
	setcycle 12 stimulus "peek peek peek lago peek peek peek"
	setcycle 12 target_type nonword
	setcycle 12 flanker_condition 1
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	setcycle 30 correct_response C
	setcycle 30 stimulus "beel roup roup beel roup roup roup"
	setcycle 30 target_type nonword
	setcycle 30 flanker_condition 2
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	setcycle 60 correct_response C
	setcycle 60 stimulus "hols preu hols preu hols hols hols"
	setcycle 60 target_type nonword
	setcycle 60 flanker_condition 3
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	setcycle 90 correct_response C
	setcycle 90 stimulus "hoot hoot feep feep hoot hoot hoot"
	setcycle 90 target_type nonword
	setcycle 90 flanker_condition 4
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	setcycle 120 correct_response C
	setcycle 120 stimulus "boal boal boal meis meis boal boal"
	setcycle 120 target_type nonword
	setcycle 120 flanker_condition 5
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	setcycle 150 correct_response C
	setcycle 150 stimulus "wors wors wors cini wors cini wors"
	setcycle 150 target_type nonword
	setcycle 150 flanker_condition 6
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	setcycle 180 correct_response C
	setcycle 180 stimulus "nale nale nale sugo nale nale sugo"
	setcycle 180 target_type nonword
	setcycle 180 flanker_condition 7
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	setcycle 210 correct_response M
	setcycle 210 stimulus "eeuw eeuw eeuw stap eeuw eeuw eeuw"
	setcycle 210 target_type word
	setcycle 210 flanker_condition 1
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	setcycle 240 correct_response M
	setcycle 240 stimulus "saai bond bond saai bond bond bond"
	setcycle 240 target_type word
	setcycle 240 flanker_condition 2
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	setcycle 270 correct_response M
	setcycle 270 stimulus "maak oude maak oude maak maak maak"
	setcycle 270 target_type word
	setcycle 270 flanker_condition 3
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	setcycle 300 correct_response M
	setcycle 300 stimulus "wijf wijf poot poot wijf wijf wijf"
	setcycle 300 target_type word
	setcycle 300 flanker_condition 4
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	setcycle 330 correct_response M
	setcycle 330 stimulus "boom boom boom duur duur boom boom"
	setcycle 330 target_type word
	setcycle 330 flanker_condition 5
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	setcycle 360 correct_response M
	setcycle 360 stimulus "liep liep liep kans liep kans liep"
	setcycle 360 target_type word
	setcycle 360 flanker_condition 6
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	setcycle 390 correct_response M
	setcycle 390 stimulus "club club club ster club club ster"
	setcycle 390 target_type word
	setcycle 390 flanker_condition 7
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	run trial_sequence_2

define loop block_loop_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 420
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "nale nale nale sugo nale nale nale"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 1
	setcycle 1 correct_response C
	setcycle 1 stimulus "woor woor woor peef woor woor woor"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 1
	setcycle 2 correct_response C
	setcycle 2 stimulus "jang jang jang telk jang jang jang"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 1
	setcycle 3 correct_response C
	setcycle 3 stimulus "hame hame hame lins hame hame hame"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 1
	setcycle 4 correct_response C
	setcycle 4 stimulus "poem poem poem drak poem poem poem"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 1
	setcycle 5 correct_response C
	setcycle 5 stimulus "buft buft buft noer buft buft buft"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "kuim kuim kuim helf kuim kuim kuim"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 1
	setcycle 7 correct_response C
	setcycle 7 stimulus "dach dach dach biee dach dach dach"
	setcycle 7 target_type nonword
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response C
	setcycle 8 stimulus "baap baap baap cens baap baap baap"
	setcycle 8 target_type nonword
	setcycle 8 flanker_condition 1
	setcycle 9 correct_response C
	setcycle 9 stimulus "maad maad maad sfee maad maad maad"
	setcycle 9 target_type nonword
	setcycle 9 flanker_condition 1
	setcycle 10 correct_response C
	setcycle 10 stimulus "voon voon voon drap voon voon voon"
	setcycle 10 target_type nonword
	setcycle 10 flanker_condition 1
	setcycle 11 correct_response C
	setcycle 11 stimulus "krad krad krad lote krad krad krad"
	setcycle 11 target_type nonword
	setcycle 11 flanker_condition 1
	setcycle 12 correct_response C
	setcycle 12 stimulus "uten uten uten hass uten uten uten"
	setcycle 12 target_type nonword
	setcycle 12 flanker_condition 1
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	setcycle 30 correct_response C
	setcycle 30 stimulus "geid patt patt geid patt patt patt"
	setcycle 30 target_type nonword
	setcycle 30 flanker_condition 2
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	setcycle 60 correct_response C
	setcycle 60 stimulus "roup beel roup beel roup roup roup"
	setcycle 60 target_type nonword
	setcycle 60 flanker_condition 3
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	setcycle 90 correct_response C
	setcycle 90 stimulus "hols hols preu preu hols hols hols"
	setcycle 90 target_type nonword
	setcycle 90 flanker_condition 4
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	setcycle 120 correct_response C
	setcycle 120 stimulus "hoot hoot hoot feep feep hoot hoot"
	setcycle 120 target_type nonword
	setcycle 120 flanker_condition 5
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	setcycle 150 correct_response C
	setcycle 150 stimulus "boal boal boal meis boal meis boal"
	setcycle 150 target_type nonword
	setcycle 150 flanker_condition 6
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	setcycle 180 correct_response C
	setcycle 180 stimulus "wors wors wors cini wors wors cini"
	setcycle 180 target_type nonword
	setcycle 180 flanker_condition 7
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	setcycle 210 correct_response M
	setcycle 210 stimulus "club club club ster club club club"
	setcycle 210 target_type word
	setcycle 210 flanker_condition 1
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	setcycle 240 correct_response M
	setcycle 240 stimulus "stap eeuw eeuw stap eeuw eeuw eeuw"
	setcycle 240 target_type word
	setcycle 240 flanker_condition 2
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	setcycle 270 correct_response M
	setcycle 270 stimulus "bond saai bond saai bond bond bond"
	setcycle 270 target_type word
	setcycle 270 flanker_condition 3
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	setcycle 300 correct_response M
	setcycle 300 stimulus "maak maak oude oude maak maak maak"
	setcycle 300 target_type word
	setcycle 300 flanker_condition 4
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	setcycle 330 correct_response M
	setcycle 330 stimulus "wijf wijf wijf poot poot wijf wijf"
	setcycle 330 target_type word
	setcycle 330 flanker_condition 5
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	setcycle 360 correct_response M
	setcycle 360 stimulus "boom boom boom duur boom duur boom"
	setcycle 360 target_type word
	setcycle 360 flanker_condition 6
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	setcycle 390 correct_response M
	setcycle 390 stimulus "liep liep liep kans liep liep kans"
	setcycle 390 target_type word
	setcycle 390 flanker_condition 7
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	run trial_sequence_3

define loop block_loop_4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 420
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "wors wors wors cini wors wors wors"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 1
	setcycle 1 correct_response C
	setcycle 1 stimulus "sams sams sams elot sams sams sams"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 1
	setcycle 2 correct_response C
	setcycle 2 stimulus "polp polp polp inze polp polp polp"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 1
	setcycle 3 correct_response C
	setcycle 3 stimulus "morp morp morp ests morp morp morp"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 1
	setcycle 4 correct_response C
	setcycle 4 stimulus "reur reur reur vits reur reur reur"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 1
	setcycle 5 correct_response C
	setcycle 5 stimulus "guvo guvo guvo kape guvo guvo guvo"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "horo horo horo elen horo horo horo"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 1
	setcycle 7 correct_response C
	setcycle 7 stimulus "tijn tijn tijn ceda tijn tijn tijn"
	setcycle 7 target_type nonword
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response C
	setcycle 8 stimulus "houp houp houp sles houp houp houp"
	setcycle 8 target_type nonword
	setcycle 8 flanker_condition 1
	setcycle 9 correct_response C
	setcycle 9 stimulus "wats wats wats noeg wats wats wats"
	setcycle 9 target_type nonword
	setcycle 9 flanker_condition 1
	setcycle 10 correct_response C
	setcycle 10 stimulus "vold vold vold teña vold vold vold"
	setcycle 10 target_type nonword
	setcycle 10 flanker_condition 1
	setcycle 11 correct_response C
	setcycle 11 stimulus "voot voot voot spal voot voot voot"
	setcycle 11 target_type nonword
	setcycle 11 flanker_condition 1
	setcycle 12 correct_response C
	setcycle 12 stimulus "spuk spuk spuk miot spuk spuk spuk"
	setcycle 12 target_type nonword
	setcycle 12 flanker_condition 1
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	setcycle 30 correct_response C
	setcycle 30 stimulus "sugo nale nale sugo nale nale nale"
	setcycle 30 target_type nonword
	setcycle 30 flanker_condition 2
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	setcycle 60 correct_response C
	setcycle 60 stimulus "patt geid patt geid patt patt patt"
	setcycle 60 target_type nonword
	setcycle 60 flanker_condition 3
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	setcycle 90 correct_response C
	setcycle 90 stimulus "roup roup beel beel roup roup roup"
	setcycle 90 target_type nonword
	setcycle 90 flanker_condition 4
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	setcycle 120 correct_response C
	setcycle 120 stimulus "hols hols hols preu preu hols hols"
	setcycle 120 target_type nonword
	setcycle 120 flanker_condition 5
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	setcycle 150 correct_response C
	setcycle 150 stimulus "hoot hoot hoot feep hoot feep hoot"
	setcycle 150 target_type nonword
	setcycle 150 flanker_condition 6
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	setcycle 180 correct_response C
	setcycle 180 stimulus "boal boal boal meis boal boal meis"
	setcycle 180 target_type nonword
	setcycle 180 flanker_condition 7
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	setcycle 210 correct_response M
	setcycle 210 stimulus "liep liep liep kans liep liep liep"
	setcycle 210 target_type word
	setcycle 210 flanker_condition 1
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	setcycle 240 correct_response M
	setcycle 240 stimulus "ster club club ster club club club"
	setcycle 240 target_type word
	setcycle 240 flanker_condition 2
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	setcycle 270 correct_response M
	setcycle 270 stimulus "eeuw stap eeuw stap eeuw eeuw eeuw"
	setcycle 270 target_type word
	setcycle 270 flanker_condition 3
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	setcycle 300 correct_response M
	setcycle 300 stimulus "bond bond saai saai bond bond bond"
	setcycle 300 target_type word
	setcycle 300 flanker_condition 4
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	setcycle 330 correct_response M
	setcycle 330 stimulus "maak maak maak oude oude maak maak"
	setcycle 330 target_type word
	setcycle 330 flanker_condition 5
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	setcycle 360 correct_response M
	setcycle 360 stimulus "wijf wijf wijf poot wijf poot wijf"
	setcycle 360 target_type word
	setcycle 360 flanker_condition 6
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	setcycle 390 correct_response M
	setcycle 390 stimulus "boom boom boom duur boom boom duur"
	setcycle 390 target_type word
	setcycle 390 flanker_condition 7
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	run trial_sequence_4

define loop block_loop_5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 420
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "boal boal boal meis boal boal boal"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 1
	setcycle 1 correct_response C
	setcycle 1 stimulus "jort jort jort miel jort jort jort"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 1
	setcycle 2 correct_response C
	setcycle 2 stimulus "kril kril kril sted kril kril kril"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 1
	setcycle 3 correct_response C
	setcycle 3 stimulus "sins sins sins elvo sins sins sins"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 1
	setcycle 4 correct_response C
	setcycle 4 stimulus "puis puis puis bome puis puis puis"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 1
	setcycle 5 correct_response C
	setcycle 5 stimulus "faai faai faai heut faai faai faai"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "kluw kluw kluw rart kluw kluw kluw"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 1
	setcycle 7 correct_response C
	setcycle 7 stimulus "kels kels kels doov kels kels kels"
	setcycle 7 target_type nonword
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response C
	setcycle 8 stimulus "kwil kwil kwil goet kwil kwil kwil"
	setcycle 8 target_type nonword
	setcycle 8 flanker_condition 1
	setcycle 9 correct_response C
	setcycle 9 stimulus "palf palf palf noet palf palf palf"
	setcycle 9 target_type nonword
	setcycle 9 flanker_condition 1
	setcycle 10 correct_response C
	setcycle 10 stimulus "noks noks noks frel noks noks noks"
	setcycle 10 target_type nonword
	setcycle 10 flanker_condition 1
	setcycle 11 correct_response C
	setcycle 11 stimulus "stot stot stot beem stot stot stot"
	setcycle 11 target_type nonword
	setcycle 11 flanker_condition 1
	setcycle 12 correct_response C
	setcycle 12 stimulus "miks miks miks peng miks miks miks"
	setcycle 12 target_type nonword
	setcycle 12 flanker_condition 1
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	setcycle 30 correct_response C
	setcycle 30 stimulus "cini wors wors cini wors wors wors"
	setcycle 30 target_type nonword
	setcycle 30 flanker_condition 2
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	setcycle 60 correct_response C
	setcycle 60 stimulus "nale sugo nale sugo nale nale nale"
	setcycle 60 target_type nonword
	setcycle 60 flanker_condition 3
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	setcycle 90 correct_response C
	setcycle 90 stimulus "patt patt geid geid patt patt patt"
	setcycle 90 target_type nonword
	setcycle 90 flanker_condition 4
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	setcycle 120 correct_response C
	setcycle 120 stimulus "roup roup roup beel beel roup roup"
	setcycle 120 target_type nonword
	setcycle 120 flanker_condition 5
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	setcycle 150 correct_response C
	setcycle 150 stimulus "hols hols hols preu hols preu hols"
	setcycle 150 target_type nonword
	setcycle 150 flanker_condition 6
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	setcycle 180 correct_response C
	setcycle 180 stimulus "hoot hoot hoot feep hoot hoot feep"
	setcycle 180 target_type nonword
	setcycle 180 flanker_condition 7
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	setcycle 210 correct_response M
	setcycle 210 stimulus "boom boom boom duur boom boom boom"
	setcycle 210 target_type word
	setcycle 210 flanker_condition 1
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	setcycle 240 correct_response M
	setcycle 240 stimulus "kans liep liep kans liep liep liep"
	setcycle 240 target_type word
	setcycle 240 flanker_condition 2
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	setcycle 270 correct_response M
	setcycle 270 stimulus "club ster club ster club club club"
	setcycle 270 target_type word
	setcycle 270 flanker_condition 3
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	setcycle 300 correct_response M
	setcycle 300 stimulus "eeuw eeuw stap stap eeuw eeuw eeuw"
	setcycle 300 target_type word
	setcycle 300 flanker_condition 4
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	setcycle 330 correct_response M
	setcycle 330 stimulus "bond bond bond saai saai bond bond"
	setcycle 330 target_type word
	setcycle 330 flanker_condition 5
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	setcycle 360 correct_response M
	setcycle 360 stimulus "maak maak maak oude maak oude maak"
	setcycle 360 target_type word
	setcycle 360 flanker_condition 6
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	setcycle 390 correct_response M
	setcycle 390 stimulus "wijf wijf wijf poot wijf wijf poot"
	setcycle 390 target_type word
	setcycle 390 flanker_condition 7
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	run trial_sequence_5

define loop block_loop_6
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 420
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "hoot hoot hoot feep hoot hoot hoot"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 1
	setcycle 1 correct_response C
	setcycle 1 stimulus "hons hons hons teuk hons hons hons"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 1
	setcycle 2 correct_response C
	setcycle 2 stimulus "kijn kijn kijn abte kijn kijn kijn"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 1
	setcycle 3 correct_response C
	setcycle 3 stimulus "onoy onoy onoy trie onoy onoy onoy"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 1
	setcycle 4 correct_response C
	setcycle 4 stimulus "baag baag baag hede baag baag baag"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 1
	setcycle 5 correct_response C
	setcycle 5 stimulus "dauk dauk dauk lors dauk dauk dauk"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "book book book deus book book book"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 1
	setcycle 7 correct_response C
	setcycle 7 stimulus "aths aths aths woeg aths aths aths"
	setcycle 7 target_type nonword
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response C
	setcycle 8 stimulus "jubs jubs jubs wemt jubs jubs jubs"
	setcycle 8 target_type nonword
	setcycle 8 flanker_condition 1
	setcycle 9 correct_response C
	setcycle 9 stimulus "unen unen unen vooi unen unen unen"
	setcycle 9 target_type nonword
	setcycle 9 flanker_condition 1
	setcycle 10 correct_response C
	setcycle 10 stimulus "naus naus naus tieg naus naus naus"
	setcycle 10 target_type nonword
	setcycle 10 flanker_condition 1
	setcycle 11 correct_response C
	setcycle 11 stimulus "cace cace cace zouw cace cace cace"
	setcycle 11 target_type nonword
	setcycle 11 flanker_condition 1
	setcycle 12 correct_response C
	setcycle 12 stimulus "tinx tinx tinx goef tinx tinx tinx"
	setcycle 12 target_type nonword
	setcycle 12 flanker_condition 1
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	setcycle 30 correct_response C
	setcycle 30 stimulus "meis boal boal meis boal boal boal"
	setcycle 30 target_type nonword
	setcycle 30 flanker_condition 2
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	setcycle 60 correct_response C
	setcycle 60 stimulus "wors cini wors cini wors wors wors"
	setcycle 60 target_type nonword
	setcycle 60 flanker_condition 3
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	setcycle 90 correct_response C
	setcycle 90 stimulus "nale nale sugo sugo nale nale nale"
	setcycle 90 target_type nonword
	setcycle 90 flanker_condition 4
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	setcycle 120 correct_response C
	setcycle 120 stimulus "patt patt patt geid geid patt patt"
	setcycle 120 target_type nonword
	setcycle 120 flanker_condition 5
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	setcycle 150 correct_response C
	setcycle 150 stimulus "roup roup roup beel roup beel roup"
	setcycle 150 target_type nonword
	setcycle 150 flanker_condition 6
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	setcycle 180 correct_response C
	setcycle 180 stimulus "hols hols hols preu hols hols preu"
	setcycle 180 target_type nonword
	setcycle 180 flanker_condition 7
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	setcycle 210 correct_response M
	setcycle 210 stimulus "wijf wijf wijf poot wijf wijf wijf"
	setcycle 210 target_type word
	setcycle 210 flanker_condition 1
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	setcycle 240 correct_response M
	setcycle 240 stimulus "duur boom boom duur boom boom boom"
	setcycle 240 target_type word
	setcycle 240 flanker_condition 2
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	setcycle 270 correct_response M
	setcycle 270 stimulus "liep kans liep kans liep liep liep"
	setcycle 270 target_type word
	setcycle 270 flanker_condition 3
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	setcycle 300 correct_response M
	setcycle 300 stimulus "club club ster ster club club club"
	setcycle 300 target_type word
	setcycle 300 flanker_condition 4
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	setcycle 330 correct_response M
	setcycle 330 stimulus "eeuw eeuw eeuw stap stap eeuw eeuw"
	setcycle 330 target_type word
	setcycle 330 flanker_condition 5
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	setcycle 360 correct_response M
	setcycle 360 stimulus "bond bond bond saai bond saai bond"
	setcycle 360 target_type word
	setcycle 360 flanker_condition 6
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	setcycle 390 correct_response M
	setcycle 390 stimulus "maak maak maak oude maak maak oude"
	setcycle 390 target_type word
	setcycle 390 flanker_condition 7
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	run trial_sequence_6

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop_0 "[subject_nr]=0"
	run block_loop_1 "[subject_nr]=1"
	run block_loop_2 "[subject_nr]=2"
	run block_loop_3 "[subject_nr]=3"
	run block_loop_4 "[subject_nr]=4"
	run block_loop_5 "[subject_nr]=5"
	run block_loop_6 "[subject_nr]=6"

define keyboard_response consent_form_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response Y
	set allowed_responses "Y;N"

define sketchpad consent_form_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=15 html=yes show_if=True text="Consent Form (part 1)<br /><br />Please read this Consent Form carefully. If you want to participate and agree<br />with all of the statements, press Y. If you do not want to participate or do not agree<br />with all of the statements, press N. <br />If you press Y, you also indicate that you agree with<br />all of the statements written in the Participant Information Form.<br /><br /><br /><br />-	I have been informed in a clear manner about the nature,<br />the method, the purpose, the potential risks, and demands of the research.<br />I was able to ask questions and my questions were met with an adequate answer.<br /> I had enough time to decide for myself whether to participate or not.<br />-	I know my participation is voluntary. I also know that I can decide at any moment<br />not to participate or to stop my participation in the study. In case I decide to terminate<br />the study prematurely or not to participate, I do not have to provide a reason.<br />-	I am aware that some people will<br />have access to my data. These people are mentioned in the Participant Information Form. <br />-	I grant permission to collect, process and use my data in the way and for the purposes<br />mentioned in the Participant Information Form.<br /> I understand my data will be treated with confidentiality<br />and that the results of this research will be made available to third parties exclusively<br />in anonymous form. <br />-	I am aware that my data, results, or derivatives thereof may be used in<br />anonymous form for educational purposes.<br />-	I give permission for my anonymised<br />data to be used for related studies. <br />-	I consent to the storage of my data for at least 10 years after I have participated<br />as is required by law.<br />-	I would like to participate in this research study.<br />" x=0 y=0 z_index=0

define keyboard_response consent_online_data_sharing_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response Y
	set allowed_responses "Y;N"

define sketchpad consent_online_data_sharing_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Consent Form (part 2)<br /><br />Please read the following statement.<br />If you agree with the statement, press Y.<br />If you do not agree with the statement, press N.<br /><br />- I give permission to share my anonymised data with the public." x=0 y=0 z_index=0

define sketchpad correct_feedback_0
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad correct_practice_7
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad correct_response_1
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad correct_response_2
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad correct_response_3
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad correct_response_4
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad correct_response_5
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad correct_response_6
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=True style=default x=0 y=0 z_index=0

define sketchpad count_1_0
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text=1 x=0 y=0 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad count_1_1
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
define sketchpad count_1_2
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
define sketchpad count_1_3
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
define sketchpad count_1_4
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
define sketchpad count_1_5
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
define sketchpad count_1_6
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
define sketchpad count_2_0
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
define sketchpad count_2_1
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
define sketchpad count_2_2
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
define sketchpad count_2_3
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
define sketchpad count_2_4
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
define sketchpad count_2_5
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
define sketchpad count_2_6
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
define sketchpad count_3_0
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
define sketchpad count_3_1
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
define sketchpad count_3_2
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
define sketchpad count_3_3
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
define sketchpad count_3_4
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
define sketchpad count_3_5
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
define sketchpad count_3_6
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
define sketchpad do_not_want_participate
	set duration 10000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="" x=-99 y=-129 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="As you have indicated that you do not consent to<br />participate in this study please return this submission<br />on Prolific by selecting the 'stop without completing' button or<br />wait for 10 seconds - you will be automatically redirected to the<br />Prolific page.<br /><br />Thank you for your time. We wish you a lovely rest of your day." x=-32 y=0 z_index=0

define keyboard_response exclusion_criteria_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response Y
	set allowed_responses "Y;N"

define sketchpad exclusion_criteria_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Validation of Prolific pre-screening questions<br /><br />Please firstly read the following five questions and then<br />press the correct button.<br /><br /><br />1) Have you received a medical diagnosis for dyslexia?<br />- You are eligible to participate in our study if your answer is: No.<br /><br />2) Do you have normal or corrected-to-normal vision?<br />- You are eligible to participate in our study if your<br />answer is: Yes.<br /><br />3) What is your first language?<br />- You are eligible to participate in our study if your<br />answer is: Dutch.<br /><br />4) What is your current age in years?<br />- You are eligible to participate in our study if your<br />answer is: from (and including) 18 to (and including) 35.<br /><br />5) Which of the following languages are you fluent in?<br />- You are eligible to participate in our study if your<br />answer includes: English.<br /><br />If the answers to ALL of the five questions match<br />our desired answer, please press Y.<br />If the answer to ANY of the five questions is different<br />than our desired answer, please press N." x=0 y=0 z_index=0

define sketchpad exclusion_sketchpad
	set duration 10000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="You are ineligible for this study as you have provided<br />information which is inconsistent with your Prolific<br />prescreening responses. Please return your submission<br />on Prolific by selecting the 'stop without completing' button or<br />wait for 10 seconds - you will be automatically redirected to the<br />Prolific page.<br /><br />Thank you for your time. We wish you a lovely rest of your day." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prolific_capture_unique_ID_inline_javascript True
	run PIF_read_sketchpad True
	run PIF_read_keyboard_response True
	run PIF_1 "[correct_PIF_read_keyboard_response]=1"
	run PIF_2 "[correct_PIF_read_keyboard_response]=1"
	run PIF_3 "[correct_PIF_read_keyboard_response]=1"
	run PIF_4 "[correct_PIF_read_keyboard_response]=1"
	run PIF_5 "[correct_PIF_read_keyboard_response]=1"
	run PIF_6 "[correct_PIF_read_keyboard_response]=1"
	run PIF_7 "[correct_PIF_read_keyboard_response]=1"
	run consent_form_sketchpad True
	run consent_form_keyboard_response True
	run consent_online_data_sharing_sketchpad "[correct_consent_form_keyboard_response]=1"
	run consent_online_data_sharing_keyboard_response "[correct_consent_form_keyboard_response]=1"
	run exclusion_criteria_sketchpad "[correct_consent_form_keyboard_response]=1 and [correct_consent_online_data_sharing_keyboard_response]=1"
	run exclusion_criteria_keyboard_response "[correct_consent_form_keyboard_response]=1 and [correct_consent_online_data_sharing_keyboard_response]=1"
	run instructions0 "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run instructions1 "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run instructions2 "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run instructions3 "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run _3 "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run _2 "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run _1 "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run practice_loop "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run reset_feedback "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run experimental_loop "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run feedback_end "[correct_consent_online_data_sharing_keyboard_response]=1 and [correct_consent_form_keyboard_response]=1 and [correct_exclusion_criteria_keyboard_response]=1"
	run do_not_want_participate "[correct_consent_form_keyboard_response]=0 or [correct_consent_online_data_sharing_keyboard_response]=0"
	run exclusion_sketchpad "[correct_exclusion_criteria_keyboard_response]=0"
	run redirect_inline_javascript True

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Je bent halverwege het experiment.<br /><br />Je gemiddelde reactietijd was [average_response_time] ms.<br />Je nauwkeurigheid was [acc] %.<br /><br />Je hebt nu een pauze. Druk op een toets om door te gaan." x=0 y=0 z_index=0

define feedback feedback_end
	set reset_variables yes
	set duration 10000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Je bent klaar! <br /><br />Bedankt voor je deelname! <br /><br />Je gemiddelde reactietijd was [average_response_time] ms.<br />Je nauwkeurigheid was [acc] %.<br /><br /><br /><br />Please wait for 10 seconds so we can automatically redirect you<br />back to the Prolific page and log that you successfully completed<br />the experiment." x=0 y=0 z_index=0

define feedback feedback_practice
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Dit is het einde van de oefening.<br /><br />Je gemiddelde reactietijd was [average_response_time] ms.<br />Je nauwkeurigheid was [acc] %.<br /><br />Druk op een toets om verder te gaan.<br />" x=0 y=0 z_index=0

define sketchpad fixation_point_0
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad fixation_point_1
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad fixation_point_2
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad fixation_point_3
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad fixation_point_4
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad fixation_point_5
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad fixation_point_6
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad fixation_practice_7
	set duration "[jitter]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=-32 y2=-64 z_index=0
	draw line color=black penwidth=1 show_if=True x1=0 x2=0 y1=32 y2=64 z_index=0

define sketchpad incorrect_feedback_0
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad incorrect_practice_7
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad incorrect_response_1
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad incorrect_response_2
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad incorrect_response_3
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad incorrect_response_4
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad incorrect_response_5
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad incorrect_response_6
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=True style=default x=0 y=0 z_index=0

define sketchpad instructions0
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Please go to a quiet room where you can do<br />the experiment by yourself. Shield the screen<br />from the direct sunlight and remove possible<br />distractions (for example telephone).<br /><br />Please sit in front of the centre of the screen<br />of your desktop computer or laptop.<br /><br />Press any key to proceed.<br />" x=0 y=0 z_index=0

define sketchpad instructions1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Er zullen letterreeksen op het scherm verschijnen.<br /><br />Als de letters in het midden een bestaand Nederlands woord vormen<br />(bijv. loop), druk dan op M. Als ze geen echt Nederlands woord vormen<br />(bijv. foop), druk dan op C. <br /><br />Antwoord zo snel en goed mogelijk! <br /><br />Druk op een toets om verder te gaan.<br />" x=0 y=0 z_index=0

define sketchpad instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Belangrijk: Er zijn steeds letters links en rechts van de middelste<br />letterreeks zichtbaar. Deze moet je negeren. Het gaat enkel<br />om het woord in het midden van het scherm!<br /><br />Druk op een toets om verder te gaan." x=0 y=0 z_index=0

define sketchpad instructions3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Je begint met een aantal oefeningen. <br /><br />Druk op een toets om verder te gaan.<br />" x=0 y=0 z_index=0

define sketchpad instructions4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Het is belangrijk dat je je focust op de letterreeks op het<br />MIDDEN van het scherm (preu).<br /><br /><br /><br />hols hols hols PREU hols hols hols<br /><br /><br /><br /><br />Het echte experiment gaat nu beginnen.<br />Druk op een toets om te beginnen." x=0 y=0 z_index=0

define inline_javascript jitter_0_inline_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define inline_javascript jitter_1_inline_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define inline_javascript jitter_2_inline_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define inline_javascript jitter_3_inline_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define inline_javascript jitter_4_inline_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define inline_javascript jitter_5_inline_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define inline_javascript jitter_6_inline_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "C; M"

define logger logger_0
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log prolific_participant_id
	log prolific_study_id
	log prolific_session_id
	log correct_consent_form_keyboard_response
	log response_consent_form_keyboard_response
	log correct_consent_online_data_sharing_keyboard_response
	log response_consent_online_data_sharing_keyboard_response
	log stimulus
	log flanker_condition
	log target_type
	log response_keyboard_response
	log correct_response
	log correct_keyboard_response
	log response_time_keyboard_response
	log time_consent_form_keyboard_response
	log time_consent_online_data_sharing_keyboard_response

define logger logger_1
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log prolific_participant_id
	log prolific_study_id
	log prolific_session_id
	log correct_consent_form_keyboard_response
	log response_consent_form_keyboard_response
	log correct_consent_online_data_sharing_keyboard_response
	log response_consent_online_data_sharing_keyboard_response
	log stimulus
	log flanker_condition
	log target_type
	log response_keyboard_response
	log correct_response
	log correct_keyboard_response
	log response_time_keyboard_response
	log time_consent_form_keyboard_response
	log time_consent_online_data_sharing_keyboard_response

define logger logger_2
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log prolific_participant_id
	log prolific_study_id
	log prolific_session_id
	log correct_consent_form_keyboard_response
	log response_consent_form_keyboard_response
	log correct_consent_online_data_sharing_keyboard_response
	log response_consent_online_data_sharing_keyboard_response
	log stimulus
	log flanker_condition
	log target_type
	log response_keyboard_response
	log correct_response
	log correct_keyboard_response
	log response_time_keyboard_response
	log time_consent_form_keyboard_response
	log time_consent_online_data_sharing_keyboard_response

define logger logger_3
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log prolific_participant_id
	log prolific_study_id
	log prolific_session_id
	log correct_consent_form_keyboard_response
	log response_consent_form_keyboard_response
	log correct_consent_online_data_sharing_keyboard_response
	log response_consent_online_data_sharing_keyboard_response
	log stimulus
	log flanker_condition
	log target_type
	log response_keyboard_response
	log correct_response
	log correct_keyboard_response
	log response_time_keyboard_response
	log time_consent_form_keyboard_response
	log time_consent_online_data_sharing_keyboard_response

define logger logger_4
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log prolific_participant_id
	log prolific_study_id
	log prolific_session_id
	log correct_consent_form_keyboard_response
	log response_consent_form_keyboard_response
	log correct_consent_online_data_sharing_keyboard_response
	log response_consent_online_data_sharing_keyboard_response
	log stimulus
	log flanker_condition
	log target_type
	log response_keyboard_response
	log correct_response
	log correct_keyboard_response
	log response_time_keyboard_response
	log time_consent_form_keyboard_response
	log time_consent_online_data_sharing_keyboard_response

define logger logger_5
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log prolific_participant_id
	log prolific_study_id
	log prolific_session_id
	log correct_consent_form_keyboard_response
	log response_consent_form_keyboard_response
	log correct_consent_online_data_sharing_keyboard_response
	log response_consent_online_data_sharing_keyboard_response
	log stimulus
	log flanker_condition
	log target_type
	log response_keyboard_response
	log correct_response
	log correct_keyboard_response
	log response_time_keyboard_response
	log time_consent_form_keyboard_response
	log time_consent_online_data_sharing_keyboard_response

define logger logger_6
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log prolific_participant_id
	log prolific_study_id
	log prolific_session_id
	log correct_consent_form_keyboard_response
	log response_consent_form_keyboard_response
	log correct_consent_online_data_sharing_keyboard_response
	log response_consent_online_data_sharing_keyboard_response
	log stimulus
	log flanker_condition
	log target_type
	log response_keyboard_response
	log correct_response
	log correct_keyboard_response
	log response_time_keyboard_response
	log time_consent_form_keyboard_response
	log time_consent_online_data_sharing_keyboard_response

define sketchpad new_1_sketchpad
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
define sketchpad new_2_sketchpad
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
define sketchpad new_3_sketchpad
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
define reset_feedback new_reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define inline_javascript practice_7_jitter_javascript
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.jitter = parseInt(700 + Math.random()*300)"

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run practice_loop_block_sequence

define loop practice_loop_7_blocks
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 28
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 correct_response C
	setcycle 0 stimulus "hols hols hols preu preu hols hols"
	setcycle 0 target_type nonword
	setcycle 0 flanker_condition 5
	setcycle 1 correct_response C
	setcycle 1 stimulus "keed keed keed noft keed keed noft"
	setcycle 1 target_type nonword
	setcycle 1 flanker_condition 6
	setcycle 2 correct_response C
	setcycle 2 stimulus "gint gint gint koed gint gint koed"
	setcycle 2 target_type nonword
	setcycle 2 flanker_condition 7
	setcycle 3 correct_response C
	setcycle 3 stimulus "laus obee laus obee laus laus laus"
	setcycle 3 target_type nonword
	setcycle 3 flanker_condition 3
	setcycle 4 correct_response C
	setcycle 4 stimulus "zies dalk dalk zies dalk dalk dalk"
	setcycle 4 target_type nonword
	setcycle 4 flanker_condition 2
	setcycle 5 correct_response C
	setcycle 5 stimulus "wans wans wans vrie wans wans wans"
	setcycle 5 target_type nonword
	setcycle 5 flanker_condition 1
	setcycle 6 correct_response C
	setcycle 6 stimulus "buim buim voof voof buim buim buim"
	setcycle 6 target_type nonword
	setcycle 6 flanker_condition 4
	setcycle 7 correct_response M
	setcycle 7 stimulus "maak maak maak oude maak maak maak"
	setcycle 7 target_type word
	setcycle 7 flanker_condition 1
	setcycle 8 correct_response M
	setcycle 8 stimulus "ouwe lijk ouwe lijk ouwe ouwe ouwe"
	setcycle 8 target_type word
	setcycle 8 flanker_condition 3
	setcycle 9 correct_response M
	setcycle 9 stimulus "fort fort fort high high fort fort"
	setcycle 9 target_type word
	setcycle 9 flanker_condition 5
	setcycle 10 correct_response M
	setcycle 10 stimulus "mede lijf lijf mede lijf lijf lijf"
	setcycle 10 target_type word
	setcycle 10 flanker_condition 2
	setcycle 11 correct_response M
	setcycle 11 stimulus "wijn wijn vuur vuur wijn wijn wijn"
	setcycle 11 target_type word
	setcycle 11 flanker_condition 4
	setcycle 12 correct_response M
	setcycle 12 stimulus "hang hang hang dure hang dure hang"
	setcycle 12 target_type word
	setcycle 12 flanker_condition 6
	setcycle 13 correct_response M
	setcycle 13 stimulus "voeg voeg voeg pijl voeg voeg pijl"
	setcycle 13 target_type word
	setcycle 13 flanker_condition 7
	setcycle 14 correct_response C
	setcycle 14 stimulus "dand spim spim dand spim spim spim"
	setcycle 14 target_type nonword
	setcycle 14 flanker_condition 2
	setcycle 15 correct_response C
	setcycle 15 stimulus "pams pams pams veet pams pams pams"
	setcycle 15 target_type nonword
	setcycle 15 flanker_condition 1
	setcycle 16 correct_response C
	setcycle 16 stimulus "daus teft daus teft daus daus daus"
	setcycle 16 target_type nonword
	setcycle 16 flanker_condition 3
	setcycle 17 correct_response C
	setcycle 17 stimulus "vrul vrul bops bops vrul vrul vrul"
	setcycle 17 target_type nonword
	setcycle 17 flanker_condition 4
	setcycle 18 correct_response C
	setcycle 18 stimulus "bust bust bust mave mave bust bust"
	setcycle 18 target_type nonword
	setcycle 18 flanker_condition 5
	setcycle 19 correct_response C
	setcycle 19 stimulus "wais wais wais voen wais voen wais"
	setcycle 19 target_type nonword
	setcycle 19 flanker_condition 6
	setcycle 20 correct_response C
	setcycle 20 stimulus "foba foba foba sune foba foba sune"
	setcycle 20 target_type nonword
	setcycle 20 flanker_condition 7
	setcycle 21 correct_response M
	setcycle 21 stimulus "fris fris fris luxe fris fris fris"
	setcycle 21 target_type word
	setcycle 21 flanker_condition 1
	setcycle 22 correct_response M
	setcycle 22 stimulus "boer hals hals boer hals hals hals"
	setcycle 22 target_type word
	setcycle 22 flanker_condition 2
	setcycle 23 correct_response M
	setcycle 23 stimulus "boom duur boom duur boom boom boom"
	setcycle 23 target_type word
	setcycle 23 flanker_condition 3
	setcycle 24 correct_response M
	setcycle 24 stimulus "gids gids vlek vlek gids gids gids"
	setcycle 24 target_type word
	setcycle 24 flanker_condition 4
	setcycle 25 correct_response M
	setcycle 25 stimulus "norm norm norm glad glad norm norm"
	setcycle 25 target_type word
	setcycle 25 flanker_condition 5
	setcycle 26 correct_response M
	setcycle 26 stimulus "viel viel viel gang viel gang viel"
	setcycle 26 target_type word
	setcycle 26 flanker_condition 6
	setcycle 27 correct_response M
	setcycle 27 stimulus "vlag vlag vlag beet vlag vlag beet"
	setcycle 27 target_type word
	setcycle 27 flanker_condition 7
	run practice_loop_7_blocks_trials_sequence

define sequence practice_loop_7_blocks_trials_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run practice_7_jitter_javascript True
	run fixation_practice_7 always
	run stimulus_practice_7 always
	run response_practice_7 True
	run response_practice_7_keyboard_response always
	run correct_practice_7 "[correct_response_practice_7_keyboard_response]=1"
	run incorrect_practice_7 "[correct_response_practice_7_keyboard_response]=0"

define sequence practice_loop_block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback True
	run practice_loop_7_blocks True
	run feedback_practice True
	run instructions4 True
	run new_1_sketchpad True
	run new_2_sketchpad True
	run new_3_sketchpad True

define inline_javascript prolific_capture_unique_ID_inline_javascript
	set description "Executes Python code"
	set _run ""
	___prepare__
	//this would be if you run your study using Prolific to capture unique ID for each participant
	
	if (window.jatos && jatos.urlQueryParameters.PROLIFIC_PID) {
	    console.log('Prolific information is available')
	    vars.prolific_participant_id = jatos.urlQueryParameters.PROLIFIC_PID
	    vars.prolific_study_id = jatos.urlQueryParameters.STUDY_ID
	    vars.prolific_session_id = jatos.urlQueryParameters.SESSION_ID
	} else {
	    console.log('Prolific information is not available (setting values to -1)')
	    vars.prolific_participant_id = -1
	    vars.prolific_study_id = -1
	    vars.prolific_session_id = -1
	}
	console.log('prolific_participant_id = ' + vars.prolific_participant_id)
	console.log('prolific_study_id = ' + vars.prolific_study_id)
	console.log('prolific_session_id = ' + vars.prolific_session_id)
	
	//creating empty variables
	vars.correct_exclusion_criteria_keyboard_response=''
	vars.correct_consent_form_keyboard_response=''
	vars.correct_consent_online_data_sharing_keyboard_response=''
	__end__

define inline_javascript redirect_inline_javascript
	set description "Executes Python code"
	___run__
	// URLs were deleted, but would be placed between the ""
	if (vars.correct_exclusion_criteria_keyboard_response===1&& vars.correct_consent_form_keyboard_response===1 && vars.correct_consent_online_data_sharing_keyboard_response===1) {
	    jatos.endStudyAndRedirect("");
	} else if (vars.correct_consent_form_keyboard_response===0 || vars.correct_consent_online_data_sharing_keyboard_response===0){
	    jatos.endStudyAndRedirect("");
	} else if (vars.correct_exclusion_criteria_keyboard_response===0){
	    jatos.endStudyAndRedirect("");  
	}
	__end__
	set _prepare ""

define reset_feedback reset_feddback_experiment
	set description "A very simple plug-in to reset feedback variables"

define reset_feedback reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define sketchpad response_practice_7
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define keyboard_response response_practice_7_keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "C; M"

define sketchpad response_sketchpad_0
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define sketchpad response_sketchpad_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define sketchpad response_sketchpad_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define sketchpad response_sketchpad_3
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define sketchpad response_sketchpad_4
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define sketchpad response_sketchpad_5
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define sketchpad response_sketchpad_6
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="#### #### #### #### #### #### ####" x=0 y=0 z_index=0

define sketchpad stimulus_0
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_1
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_2
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_3
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_4
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_5
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_6
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_practice_7
	set duration 150
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="[stimulus]" x=0 y=0 z_index=0

define sequence trial_sequence_0
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_0_inline_javascript True
	run feedback "[count_trial_sequence_0]=209"
	run reset_feddback_experiment "[count_trial_sequence_0]=209"
	run count_3_0 "[count_trial_sequence_0]=209"
	run count_2_0 "[count_trial_sequence_0]=209"
	run count_1_0 "[count_trial_sequence_0]=209"
	run fixation_point_0 True
	run stimulus_0 True
	run response_sketchpad_0 always
	run keyboard_response True
	run correct_feedback_0 "[correct_keyboard_response]=1"
	run incorrect_feedback_0 "[correct_keyboard_response]=0"
	run logger_0 True

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_1_inline_javascript True
	run feedback "[count_trial_sequence_1]=209"
	run reset_feddback_experiment "[count_trial_sequence_1]=209"
	run count_3_1 "[count_trial_sequence_1]=209"
	run count_2_1 "[count_trial_sequence_1]=209"
	run count_1_1 "[count_trial_sequence_1]=209"
	run fixation_point_1 True
	run stimulus_1 True
	run response_sketchpad_1 always
	run keyboard_response True
	run correct_response_1 "[correct_keyboard_response]=1"
	run incorrect_response_1 "[correct_keyboard_response]=0"
	run logger_1 True

define sequence trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_2_inline_javascript True
	run feedback "[count_trial_sequence_2]=209"
	run reset_feddback_experiment "[count_trial_sequence_2]=209"
	run count_3_2 "[count_trial_sequence_2]=209"
	run count_2_2 "[count_trial_sequence_2]=209"
	run count_1_2 "[count_trial_sequence_2]=209"
	run fixation_point_2 True
	run stimulus_2 True
	run response_sketchpad_2 always
	run keyboard_response True
	run correct_response_2 "[correct_keyboard_response]=1"
	run incorrect_response_2 "[correct_keyboard_response]=0"
	run logger_2 True

define sequence trial_sequence_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_3_inline_javascript True
	run feedback "[count_trial_sequence_3]=209"
	run reset_feddback_experiment "[count_trial_sequence_3]=209"
	run count_3_3 "[count_trial_sequence_3]=209"
	run count_2_3 "[count_trial_sequence_3]=209"
	run count_1_3 "[count_trial_sequence_3]=209"
	run fixation_point_3 True
	run stimulus_3 True
	run response_sketchpad_3 always
	run keyboard_response True
	run correct_response_3 "[correct_keyboard_response]=1"
	run incorrect_response_3 "[correct_keyboard_response]=0"
	run logger_3 True

define sequence trial_sequence_4
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_4_inline_javascript True
	run feedback "[count_trial_sequence_4]=209"
	run reset_feddback_experiment "[count_trial_sequence_4]=209"
	run count_3_4 "[count_trial_sequence_4]=209"
	run count_2_4 "[count_trial_sequence_4]=209"
	run count_1_4 "[count_trial_sequence_4]=209"
	run fixation_point_4 True
	run stimulus_4 True
	run response_sketchpad_4 always
	run keyboard_response True
	run correct_response_4 "[correct_keyboard_response]=1"
	run incorrect_response_4 "[correct_keyboard_response]=0"
	run logger_4 True

define sequence trial_sequence_5
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_5_inline_javascript True
	run feedback "[count_trial_sequence_5]=209"
	run reset_feddback_experiment "[count_trial_sequence_5]=209"
	run count_3_5 "[count_trial_sequence_5]=209"
	run count_2_5 "[count_trial_sequence_5]=209"
	run count_1_5 "[count_trial_sequence_5]=209"
	run fixation_point_5 True
	run stimulus_5 True
	run response_sketchpad_5 always
	run keyboard_response True
	run correct_response_5 "[correct_keyboard_response]=1"
	run incorrect_response_5 "[correct_keyboard_response]=0"
	run logger_5 True

define sequence trial_sequence_6
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_6_inline_javascript True
	run feedback "[count_trial_sequence_6]=209"
	run reset_feddback_experiment "[count_trial_sequence_6]=209"
	run count_3_6 "[count_trial_sequence_6]=209"
	run count_2_6 "[count_trial_sequence_6]=209"
	run count_1_6 "[count_trial_sequence_6]=209"
	run fixation_point_6 True
	run stimulus_6 True
	run response_sketchpad_6 always
	run keyboard_response True
	run correct_response_6 "[correct_keyboard_response]=1"
	run incorrect_response_6 "[correct_keyboard_response]=0"
	run logger_6 True

